<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.6.1">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/Users/visanim/work/random-markov-field/fake_extract/data/2182_14_1_pos/20250505_JDAN_2182_14_1_pos.mzML</file>
        </parameter>
        <parameter name="Try vendor centroiding">true</parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>12.01</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>12.01</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">10000.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_targeted.TargetedFeatureDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>12.01</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Name suffix">detectedPeak</parameter>
        <parameter name="Database file">
            <current_file>/Users/visanim/work/random-markov-field/fake_extract/data/2182_14_1_pos/feature_list.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Columns">
            <importtype column="neutral mass" datatype="io.github.mzmine.datamodel.features.types.numbers.NeutralMassType" selected="true"/>
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            <importtype column="rt" datatype="io.github.mzmine.datamodel.features.types.numbers.RTType" selected="true"/>
            <importtype column="formula" datatype="io.github.mzmine.datamodel.features.types.annotations.formula.FormulaType" selected="true"/>
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            <importtype column="name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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        </parameter>
        <parameter name="Intensity tolerance">1.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="true" unit="MINUTES">20.0</parameter>
        <parameter name="Mobility time tolerance" selected="false"/>
        <parameter name="Calculate adduct masses" selected="true">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="0.0" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
            </parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_groupms2.GroupMS2Module" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="MS1 to MS2 precursor tolerance (m/z)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
        <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
        <parameter name="Minimum required signals" selected="true">1</parameter>
        <parameter name="Limit by ion mobility edges">false</parameter>
        <parameter name="Minimum detections in IMS dimension">2</parameter>
        <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="SECONDS">10.0</parameter>
        <parameter name="Minimum feature height">10000.0</parameter>
        <parameter name="Intensity threshold for correlation">10000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>1</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.0</parameter>
            <parameter name="Exclude gap-filled features">false</parameter>
        </parameter>
        <parameter name="Feature shape correlation" selected="false">
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        </parameter>
        <parameter name="Feature height correlation" selected="false">
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        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Advanced" selected="true">
            <parameter name="Keep extended stats">true</parameter>
            <parameter name="Simplify for ≥ samples">250</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">10000.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="0.0" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="true">3</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="false">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</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">true</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/visanim/work/random-markov-field/fake_extract/data/2182_14_1_pos/{}_sirius.mgf</current_file>
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        </parameter>
        <parameter name="Intensity normalization" scientific="true">no_normalization</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">single_merged_scan</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.001</absolutetolerance>
                    <ppmtolerance>5.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.003</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/visanim/work/random-markov-field/fake_extract/data/2182_14_1_pos/{}_gnps.mgf</current_file>
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        </parameter>
        <parameter name="Filter rows">ALL</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="input_scans">
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            <module name="input_scans">
                <parameter name="Select input scans">most_intense_across_samples</parameter>
            </module>
        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Feature intensity">Height</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.export.ExportCorrAnnotationModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/visanim/work/random-markov-field/fake_extract/data/2182_14_1_pos/2182_14_1_pos.csv</current_file>
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        </parameter>
        <parameter name="Export row relationships">
            <item>GNPS mod-cosine</item>
            <item>Ion Identity</item>
            <item>MS1 shape correlation</item>
            <item>MS2 neutral loss cosine</item>
            <item>Online reaction</item>
            <item>Other</item>
        </parameter>
        <parameter name="Combine to one file">true</parameter>
        <parameter name="Export IIN edges">true</parameter>
        <parameter name="Export IIN relationship edges">false</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
